PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '\'sub-\' + f"{randint(0, 99999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1200]
  expName = random_dot
  keyboardBackend = ioHub
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Routines
  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Sie sind am Ende angelangt.

        Vielen Dank, dass sie an diesem Experiment teilgenommen haben. :)
  Routine dots
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    CodeComponent codeDots
      Code Type = Py
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      Begin Routine:
        if direction == "right":
            dots_direction = 0
        elif direction == "left":
            dots_direction = 180
    PolygonComponent backgroundDots
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startEstim = 0
      startVal [frame N] = 0
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    DotsComponent stimulusDots
      coherence = 0.08
      dir [set every repeat] = dots_direction
      dotLife = 3
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 250
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.0125
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [time (s)] = 5
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    KeyboardComponent respDots
      allowedKeys = 'left', 'right'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      storeCorrect = True
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  Routine feedback
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    CodeComponent codeFeedback
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if respDots.keys is None:
            response_text = "verpasst"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast' (like Mulder et al., 2012 did).
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif respDots.rt <= 0.1:
            response_text = "zu schnell"

        # If the response time was between 100ms and 1500ms (i.e. it was valid), give
        # feedback. If the repsonse was also correct, set the response text to '+5 points',
        # if it was wrong, set the response text to '+0 points'.
        # The variable 'direction' is a loop variable storing the stimulus direction for
        # the current trial.
        else:
            if (direction == "left" and respDots.keys == "left" or
                direction == "right" and respDots.keys == "right"
            ):
                response_text = "richtig"
            else:
                response_text = "falsch"
    TextComponent textFeedback
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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  Routine ITI
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    CodeComponent preFixcross
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        fixation_pre = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixcross
      letterHeight = 0.1
      startVal [time (s)] = $fixation_pre
      stopVal [duration (s)] = 0.8
      text = +
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  Routine info
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    TextComponent instrBeginTest
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Wir sind nun mit dem Übungsdurchgang fertig und werden zum Hauptexperiment übergehen.

        Drücken Sie die [Leertaste], um zum Hauptexperiment zu gelangen.
    KeyboardComponent keyRespBeginTest
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine random_instruction
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    CodeComponent codeRandomInstr
      Code Type = Py
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      Begin Routine:
        instruction_text = ""

        if randomInstr == "accuracy":
            instruction_text = "Bitte versuchen Sie jetzt SO SCHNELL WIE MÖGLICH zu antworten. Drücken Sie [Leertaste], um das Experiment zu starten."
        elif randomInstr == "speed":
            instruction_text = "Bitte versuchen Sie jetzt SO GENAU WIE MÖGLICH zu antworten. Drücken Sie [Leertaste], um das Experiment zu starten."
    TextComponent textRandomInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent respRandomInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine main_instruction
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    TextComponent text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Hautexperiment. Ihre Aufgabe ist es wiederum, zu entscheiden, in welche Richtung sich die Punkte bewegen.

        Drücken Sie die linke Pfeiltaste, wenn Sie glauben, dass sich die Punkte nach links bewegen, oder die rechte Pfeiltaste, wenn Sie glauben, dass sie sich nach rechts bewegen.

        Drücken Sie die [Leertaste] um fortzufahren.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine general_instruction
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    TextComponent textInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Experiment.

        Stellen Sie sicher, dass Sie sich in einer ruhigen Umgebung befinden, in der Sie sich konzentrieren können.

        Im Folgenden werden Sie eine Reihe von Aufgaben lösen. Ihnen wird ein Kreis voller Punkte präsentiert. Einige dieser Punkte bewegen sich entweder nach links oder nach rechts. Ihre Aufgabe ist es, zu entscheiden, in welche Richtung sie sich bewegen.

        Drücken Sie die linke Pfeiltaste, wenn Sie glauben, dass sich die Punkte nach links bewegen, oder die rechte Pfeiltaste, wenn Sie glauben, dass sie sich nach rechts bewegen.

        Bitte konzentrieren Sie sich immer auf das kleine Kreuz auf dem Bildschirm, wenn nichts anderes angezeigt wird.

        Drücken Sie [Leertaste], um mit dem Übungsdurchgang zu beginnen, wenn Sie bereit sind.
    CodeComponent codeInstr
      Code Type = Auto->JS
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      Begin Experiment:
        win.color = 'black'
    KeyboardComponent respInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine general_instruction
  LoopInitiator practice_run_loop loopType="TrialHandler"
    conditionsFile = random_dot_conditions.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('direction', 'left'), ('corrAns', 'left'), ('randomInstr', 'accuracy')]),
      OrderedDict([('direction', 'right'), ('corrAns', 'right'), ('randomInstr', 'speed')])]
    Routine ITI
    Routine dots
    Routine feedback
  LoopTerminator practice_run_loop
  Routine info
  Routine main_instruction
  LoopInitiator instr loopType="TrialHandler"
    conditionsFile = random_dot_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direction', 'left'), ('corrAns', 'left'), ('run', 'run_1'), ('randomInstr', 'accuracy')]),
      OrderedDict([('direction', 'right'), ('corrAns', 'right'), ('run', 'run_2'), ('randomInstr', 'speed')])]
    Routine random_instruction
    LoopInitiator loop loopType="TrialHandler"
      conditionsFile = random_dot_conditions.csv
      loopType = random
      nReps = 30
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      conditions:
        [OrderedDict([('direction', 'left'), ('corrAns', 'left'), ('randomInstr', 'accuracy')]),
        OrderedDict([('direction', 'right'), ('corrAns', 'right'), ('randomInstr', 'speed')])]
      Routine ITI
      Routine dots
    LoopTerminator loop
  LoopTerminator instr
  Routine goodbye
