PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = stroop_test
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Routines
  Routine practice_run
    TextComponent stimulus_practice
      color [set every repeat] = $colorPractice
      letterHeight = 0.1
      startVal [time (s)] = $pre_fixcross
      text [set every repeat] = $wordPractice
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    KeyboardComponent respPractice
      allowedKeys = 'r', 'g', 'b'
      correctAns = $corrAnsPractice
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine color_to_key_run
    TextComponent text_CTK
      color [set every repeat] = $colorCTK
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $wordCTK
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    KeyboardComponent key_resp_CTK
      allowedKeys = 'r', 'g', 'b'
      correctAns = $corrAnsCTK
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine test_run
    TextComponent text
      color [set every repeat] = $color
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      text [set every repeat] = $word
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    KeyboardComponent key_resp
      allowedKeys = 'r', 'g', 'b'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine goodbye
    TextComponent textGoodbye
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Sie sind am Ende angelangt.

        Vielen Dank, dass sie an diesem Experiment teilgenommen haben. :)
  Routine practice_feedback
    CodeComponent codeFeedback
      Code Type = Both
      Begin JS Routine:
        /* Syntax Error: Fix Python code */
      Begin Routine:
        if (respPractice.keys == "r" and corrAnsPractice == "r" or
            respPractice.keys == "g" and corrAnsPractice == "g" or
            respPractice.keys == "b" and corrAnsPractice == "b"):
            response_text = "richtig"
        elif (respPractice.keys == "r" and corrAnsPractice == "b" or
            respPractice.keys == "r" and corrAnsPractice == "g" or
            respPractice.keys == "b" and corrAnsPractice == "r" or
            respPractice.keys == "b" and corrAnsPractice == "g" or
            respPractice.keys == "g" and corrAnsPractice == "r" or
            respPractice.keys == "g" and corrAnsPractice == "b"):
            response_text = "falsch"
    TextComponent textFeedback
      color [set every repeat] = white
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $response_text
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  Routine instruction
    TextComponent instr_text
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Stroop-Test!

        Vielen Dank, dass Sie an diesem Experiment teilnehmen.

        Bitte stellen Sie sicher, dass die Farben auf Ihrem Bildschirm korrekt angezeigt werden. Stellen Sie sicher, dass Sie sich in einer ruhigen Umgebung befinden, in der Sie sich konzentrieren können.

        Es gibt zwei Übungsdurchgänge und einen Test-Durchgang.

        In jedem Durchgang werden ihnen unterschiedliche Wörter präsentiert. Ihre Aufgabe ist es, die Farbe jedes Wortes anzugeben.

        Legen sie den Mittelfinger der linken Hand auf die R-Taste und den Zeigfinger auf die G-Taste.
        Legen sie den Zeigfinger der rechten Hand auf die B-Taste.









        Wenn Sie bereit sind, drücken sie die Leertaste, damit sie zum Übungsdurchgang gelangen.
    CodeComponent instr_code
      Code Type = Py
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      Begin Experiment:
        win.color = 'black'
    ImageComponent instr_image
      image = illustration_keyborad.PNG
      pos = (0, -0.18)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_color_to_key
    TextComponent instr_ctk
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Aufgepasst, jetzt startet der erste Übungsdurchgang.

        Drücken Sie die Leertaste, wenn Sie soweit sind.
    KeyboardComponent resp_ctk
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_ctk
      Code Type = Auto->JS
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      Begin Experiment:
        win.color = 'black'
  Routine begin_practice
    TextComponent practice_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Aufgepasst, jetzt startet der zweite Übungsdurchgang!

        Drücken Sie die Leertaste, wenn Sie soweit sind.
    KeyboardComponent practice_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_test
    TextComponent begin_test_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Aufgepasst, jetzt startet der Testdurchgang!

        Drücken Sie die Leertaste, wenn Sie soweit sind.
    KeyboardComponent begin_test_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ITI
    CodeComponent pre_fixcross
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        pre_fixcross = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixcross
      letterHeight = 0.1
      startVal [time (s)] = $pre_fixcross
      stopVal [duration (s)] = 0.8
      text = +
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  Routine participantID
    CodeComponent codeParticipantID
      Code Type = Py
      Begin Experiment:
        import time, string, random

        # sample 3 uppercase letters
        letters = np.random.choice(list(string.ascii_uppercase), 3)
        # convert characters into string
        letters = ''.join(letters)

        # take timestamp in seconds and convert to milliseconds
        timestamp = round(time.time() * 1000)
        # remove first 6 digits
        timestamp = int(str(timestamp)[6:])
        # concatenate letters and timestamp to create unique ID
        participant_id = letters + str(timestamp)
Flow
  Routine participantID
  Routine instruction
  Routine begin_color_to_key
  LoopInitiator trials_CTK loopType="TrialHandler"
    conditionsFile = stroop_condition_file_CTK.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'wordCTK': 'test', 'colorCTK': 'red', 'corrAnsCTK': 'r', 'congruentCTK': 1},
      {'wordCTK': 'test', 'colorCTK': 'yellow', 'corrAnsCTK': 'g', 'congruentCTK': 1},
      {'wordCTK': 'test', 'colorCTK': 'blue', 'corrAnsCTK': 'b', 'congruentCTK': 1}]
    Routine ITI
    Routine color_to_key_run
  LoopTerminator trials_CTK
  Routine begin_practice
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = stroop_condition_file_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'wordPractice': 'rot', 'colorPractice': 'red', 'corrAnsPractice': 'r', 'congruentPractice': 1},
      {'wordPractice': 'rot', 'colorPractice': 'blue', 'corrAnsPractice': 'r', 'congruentPractice': 0},
      {'wordPractice': 'rot', 'colorPractice': 'yellow', 'corrAnsPractice': 'r', 'congruentPractice': 0},
      {'wordPractice': 'blau', 'colorPractice': 'red', 'corrAnsPractice': 'b', 'congruentPractice': 0},
      {'wordPractice': 'blau', 'colorPractice': 'blue', 'corrAnsPractice': 'b', 'congruentPractice': 1},
      {'wordPractice': 'blau', 'colorPractice': 'yellow', 'corrAnsPractice': 'b', 'congruentPractice': 0},
      {'wordPractice': 'gelb', 'colorPractice': 'red', 'corrAnsPractice': 'g', 'congruentPractice': 0},
      {'wordPractice': 'gelb', 'colorPractice': 'blue', 'corrAnsPractice': 'g', 'congruentPractice': 0},
      {'wordPractice': 'gelb', 'colorPractice': 'yellow', 'corrAnsPractice': 'g', 'congruentPractice': 1}]
    Routine ITI
    Routine practice_run
    Routine practice_feedback
  LoopTerminator trials_practice
  Routine begin_test
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = stroop_condition_file_test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'rot', 'color': 'red', 'corrAns': 'r', 'congruent': 1},
      {'word': 'rot', 'color': 'blue', 'corrAns': 'r', 'congruent': 0},
      {'word': 'rot', 'color': 'yellow', 'corrAns': 'r', 'congruent': 0},
      {'word': 'blau', 'color': 'red', 'corrAns': 'b', 'congruent': 0},
      {'word': 'blau', 'color': 'blue', 'corrAns': 'b', 'congruent': 1},
      {'word': 'blau', 'color': 'yellow', 'corrAns': 'b', 'congruent': 0},
      {'word': 'gelb', 'color': 'red', 'corrAns': 'g', 'congruent': 0},
      {'word': 'gelb', 'color': 'blue', 'corrAns': 'g', 'congruent': 0},
      {'word': 'gelb', 'color': 'yellow', 'corrAns': 'g', 'congruent': 1}]
    Routine ITI
    Routine test_run
  LoopTerminator trials_test
  Routine goodbye
